CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:UVDamage
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ChannelName

ColorToGray:[module_num:5|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
    Select the input image:UVDamage
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:CPD

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2.6976
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensityDistribution:[module_num:7|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
    Select images to measure:CPD
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:25
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    Image:None
    Objects to display:Do not use
    Number of bins:4
    Measurement:Mean Fraction
    Color map:magma_r
    Save display as image?:No
    Output image name:Heatmap

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|U:\\VAMP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measure_Intensity_Distribution
    Overwrite existing files without warning?:No
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